PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['UIN'], expName, expInfo['date'])
  Experiment info = {'Age': '', 'Gender': "['Female', 'Male', 'Other']", 'UIN': '', 'Left/Right Handed?': "['Right', 'Left']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = Flanker_Mouse
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Routines
  Routine Initialize
    CodeComponent initialize_code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        from pathlib import Path
        import os, sys, subprocess, time
        sys.path.append('./lib/')

        # Define an LSL stream for Stimulus type (Congruent - Incongruent)
        info_stim_type= StreamInfo(name='Psychopy_stim_type', type='Markers', channel_count=1,
                          channel_format='string', source_id='Marker123')
        outlet_stim_type = StreamOutlet(info_stim_type)


        # Define an LSL stream for clicking on a left/right button
        info_mouseClick= StreamInfo(name='Psychopy_mouseClick', type='Markers', channel_count=1,
                          channel_format='string', source_id='mouseclick123')
        outlet_mouseClick = StreamOutlet(info_mouseClick)

        # Define an LSL stream for mouse position & time: mouse.x, mouse.y, mouse.time
        info_mousePos= StreamInfo(name='Psychopy_mousePos', type='Markers', channel_count=3,
                          channel_format='float32', source_id='mousePos123')
        outlet_mousePos = StreamOutlet(info_mousePos)

        ###################################
        ############# EEG LSL #############
        ###################################
        """ Run Unicorn LSL -- Sending Unicorn Data to LSL """
        Unicorn_LSL = subprocess.Popen("./lib/UnicornLSL/UnicornLSL.exe")

        """ Run BrainProducts LiveAmp - 16 Channel LSL -- Send LiveAmp Data to LSL """
        LiveAmp_LSL = subprocess.Popen("./lib/LiveAmp16-LSL/LiveAmp-LSL.exe")

        """ Run OpenBCI Send Data to LSL """
        OpenBCI_LSL = subprocess.Popen(['python.exe',"./lib/OpenBCILSL/OpenBCILSL.py"])

        """ Send Mindwave data to LSL --
        Remember to install Mindwave LSL using: pip install mindwavelsl """
        #from mindwavelsl import MindwaveLSL
        #mwlsl = MindwaveLSL('localhost', 13854)
        #mwlsl.setup()
        #mwlsl.run()

        """ Send Muse data to LSL """
        """ Download and Install Bluemuse from:
            https://github.com/kowalej/BlueMuse/releases/download/v2.1/BlueMuse_2.1.0.0.zip
                1. Navigate to the unzipped app folder and run the .\InstallBlueMuse.ps1 PowerShell
                    command (right click and choose Run with PowerShell or execute from terminal directly):
                2. Follow the prompts - the script should automatically
                    install the security certificate, all dependencies, and the BlueMuse app.
            Install Muselsl using: pip install muselsl
            Reference: https://github.com/kowalej/BlueMuse """

        # Set LSL_LOCAL_CLOCK for MUSE and Send Muse Data to LSL
        subprocess.check_output("start bluemuse://setting?key=primary_timestamp_format!value=LSL_LOCAL_CLOCK_NATIVE",
                                shell=True)
        subprocess.check_output("start bluemuse://start?streamfirst=true", shell=True)
        ###################################

        ###################################
        ############# GSR LSL #############
        ###################################
        """ Run GSR Send to LSL """
        #GSR_LSL = subprocess.Popen(['python.exe', './lib/GSR_eHealth/Serial2LSL.py'])
        ###################################

        ############################################
        ############# EYE TRACKING LSL #############
        ############################################
        """ Run Gazepoint Control (for Calibration) --
           Gazepoint Control must be open in the background while the experiment is running """
        os.system("TASKKILL /F /IM Gazepoint.exe")
        Gazepoint_Control = subprocess.Popen("C:/Program Files (x86)/Gazepoint/Gazepoint/bin64/Gazepoint.exe")
        ############################################

        ##################################################
        ############# KINECT BODY BASICS LSL #############
        ##################################################
        """ Run Kinect Body Basics LSL -- Sending kinect Body Basics Data to LSL """
        """ Remember to Download and Install Microsoft Kinect for Windows SDK 2.0 from:
            https://www.microsoft.com/en-us/download/details.aspx?id=44561
            Restart your PC after installing Kinect SDK """
        Kinect_BodyBasics_LSL = subprocess.Popen("./lib/Kinect-BodyBasics-LSL/BodyBasicsLSL.exe")
        ##################################################
      End Experiment:
        Unicorn_LSL.kill()
        Kinect_BodyBasics_LSL.kill()
        Gazepoint_Control.kill()
        #GSR_LSL.kill()
        #LiveAmp_LSL.kill()
        OpenBCI_LSL.kill()
        subprocess.check_output("start bluemuse://shutdown", shell=True)

        XDF_Record.kill()
      End Routine:
        # Minimize the experiment screen for Gazepoint eye tracking calibration
        win.winHandle.minimize()
    TextComponent text_begin
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press "Space" to Begin
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    KeyboardComponent key_resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Record_Start
    KeyboardComponent key_record
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_record
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        LabRecorder Started Saving the LSL Streams...

        Please press "Space" to continue.
    CodeComponent xdf_record
      Code Type = Auto->JS
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      End Routine:
        if Gazepoint_Control.poll() is not None:

            Gazepoint_Control = subprocess.Popen("C:/Program Files (x86)/Gazepoint/Gazepoint/bin64/Gazepoint.exe")

        GazepointLSL = subprocess.Popen(['python.exe', '.\lib\Gazepoint(Eyetracking+Biometrics)-LSL\LSLGazepoint.py'])


        # Creating the command for saving the XDF file
        currentTime = expInfo['date']
        subjectID = expInfo['UIN']
        LabRecorderCLI_path = ".\lib\LabRecorder\LabRecorderCLI.exe"
        Path("./stream").mkdir(parents=True, exist_ok=True)
        Dataset_path = ".\stream\\"
        save_path = Dataset_path + currentTime + subjectID + ".xdf"
        XDF_save_command = LabRecorderCLI_path + " " + save_path + " " + "'searchstr'"

        XDF_Record = os.popen(XDF_save_command)
  Routine Instruction_for_Mouse
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instruct
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the Arrows on "Top Left" or "Top Right" of the Screen. 
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  Routine Inter_Stimulus_Wait
    TextComponent blank_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine Fixation
    TextComponent fixation_sign
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent set_mouse_pos
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setPos([0,-0.8])
  Routine Stimulus_Presentation
    PolygonComponent Left_resp
      fillColor = black
      pos = (-0.85, 0.825)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent Right_resp
      fillColor = black
      pos = (0.85, 0.825)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Left_arr
      letterHeight = 0.3
      pos = (-0.85, 0.85)
      startVal [time (s)] = 0.0
      text = <-
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    TextComponent Right_arr
      letterHeight = 0.3
      pos = (0.85, 0.85)
      startVal [time (s)] = 0.0
      text = ->
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    TextComponent Stimulus
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $stim
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    TextComponent Error
      color = black
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 3
      text = Please Click on Left or Right Box
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    MouseComponent mouse
      clickable = Left_resp, Right_resp
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent stimulus_code
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setPos([0,-0.8])
        outlet_stim_type.push_chunk(stim_type)
      Each Frame:
        T=mouse.time[-1]
        X=mouse.x[-1]
        Y=mouse.y[-1]

        outlet_mousePos.push_chunk([X, Y, T])
      End Routine:
        outlet_mouseClick.push_chunk(mouse.clicked_name)
Flow
  Routine Initialize
  Routine Record_Start
  Routine Instruction_for_Mouse
  LoopInitiator Trials_Loop loopType="TrialHandler"
    conditionsFile = Stimuli/stimuliFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimID', 1), ('stim_type', 'A'), ('stim', '< < < < <'), ('corr_key', 'Left_resp'), ('cong', 'C')]),
      OrderedDict([('stimID', 2), ('stim_type', 'B'), ('stim', '> > > > >'), ('corr_key', 'Right_resp'), ('cong', 'C')]),
      OrderedDict([('stimID', 3), ('stim_type', 'C'), ('stim', '> > < > >'), ('corr_key', 'Left_resp'), ('cong', 'I')]),
      OrderedDict([('stimID', 4), ('stim_type', 'D'), ('stim', '< < > > >'), ('corr_key', 'Right_resp'), ('cong', 'I')])]
    Routine Inter_Stimulus_Wait
    Routine Fixation
    Routine Stimulus_Presentation
  LoopTerminator Trials_Loop
